OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.0.0-beta)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream -> Signal display "Original_Signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Channel Selector "3"
  Channel List = 3
  Action = Select
  Channel Matching Method = Index
-> Temporal filter "BandPass_1-50" => #3
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 50
  Band Pass Ripple (dB) = 0.5
-> Temporal filter "Delta_filter"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 4
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #7
#3 -> Temporal filter "Theta_Filter"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 8
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #11
#3 -> Temporal filter "Alpha_Filter"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #15
#3 -> Temporal filter "Beta_Filter"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 12
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #19
#3 -> Temporal filter "Gamma_Filter"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 30
  High Cut-off Frequency (Hz) = 50
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #23
Input - A=#7, Input - B=#11, Input - C=#15, Input - D=#19, Input - E=#23 -> Simple DSP => #24
  Equation = (C/(A+B+C+D+E))
Input - A=#7, Input - B=#11, Input - C=#15, Input - D=#19, Input - E=#23 -> Simple DSP
  Equation = (C/(A+B+C+D+E))-0.2
#0.Signal stream -> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Index
-> Temporal filter "BandPass_1-50" => #27
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 50
  Band Pass Ripple (dB) = 0.5
-> Temporal filter "Delta_filter"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 4
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #31
#27 -> Temporal filter "Theta_Filter"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 8
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #35
#27 -> Temporal filter "Alpha_Filter"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #39
#27 -> Temporal filter "Beta_Filter"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 12
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #43
#27 -> Temporal filter "Gamma_Filter"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 30
  High Cut-off Frequency (Hz) = 50
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #47
Input - A=#31, Input - B=#35, Input - C=#39, Input - D=#43, Input - E=#47 -> Simple DSP => #48
  Equation = (C/(A+B+C+D+E))
Input - A=#31, Input - B=#35, Input - C=#39, Input - D=#43, Input - E=#47 -> Simple DSP
  Equation = (C/(A+B+C+D+E))-0.2
#0.Signal stream -> Channel Selector "2" => #50
  Channel List = 2
  Action = Select
  Channel Matching Method = Index
Data=#50 -> Signal display "Channel_Signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#50 -> Temporal filter "BandPass_1-50" => #52
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 50
  Band Pass Ripple (dB) = 0.5
-> Temporal filter "Delta_filter"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 4
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #56
#52 -> Temporal filter "Theta_Filter"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 8
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #60
#52 -> Temporal filter "Alpha_Filter"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #64
Data=#64 -> Signal display "Alpha_Signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 160
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#52 -> Temporal filter "Beta_Filter"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 12
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #69
#52 -> Temporal filter "Gamma_Filter"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 30
  High Cut-off Frequency (Hz) = 50
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #73
Input - A=#56, Input - B=#60, Input - C=#64, Input - D=#69, Input - E=#73 -> Simple DSP => #74
  Equation = (C/(A+B+C+D+E))
Data=#74 -> Signal display "Alpha_Signal_%"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 1
  Vertical Offset = 0
  Time Scale = 160
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input - A=#74, Input - B=#24, Input - C=#48 -> Simple DSP => #76
  Equation = (A+B+C)/3
Data=#76 -> Signal display "3ch_Alpha_Signal_%"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 1
  Vertical Offset = 0
  Time Scale = 160
  Bottom ruler = true
  Left ruler = true
  Multiview = false
Input - A=#56, Input - B=#60, Input - C=#64, Input - D=#69, Input - E=#73 -> Simple DSP => #78
  Equation = (C/(A+B+C+D+E))-0.2
-> Sign Change Detector
  Sign switch to positive stimulation = OVTK_StimulationId_Label_01
  Sign switch to negative stimulation = OVTK_StimulationId_Label_00
  Channel Index = 1
-> Button VRPN Server
  Peripheral name = openvibe-vrpn
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_01
Data=#78 -> Signal display "sign change"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 160
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#78 -> LSL Export (Gipsa)
  Stream name = OpenViBE Stream1
  Stream type = EEG

Button VRPN Client
  Peripheral name = openvibe-vrpn@localhost
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_01
-> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_Label_00
  Cue Image 1 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/01.png
  Stimulation 1 = OVTK_StimulationId_Label_01
